PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experimentEagle22
  keyboardBackend = ioHub
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Routines
  Routine Intro_Page
    TextComponent Title
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Intro page
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    TextComponent SubTitle
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Controls and example pic
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    ImageComponent arrows
      image = /home/rfox/PhD/Term1_22-23_Experiements/experimentEagle22/images/SeekPng.com_arrow-keys-png_3271603.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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    ImageComponent wasd
      image = /home/rfox/PhD/Term1_22-23_Experiements/experimentEagle22/images/SeekPng.com_wasd-png_1791627.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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    ImageComponent Sim
      image = /home/rfox/PhD/Term1_22-23_Experiements/experimentEagle22/images/Simulator.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [condition] = 1.0
      text = Click here or press spacebar to continue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start_Page
    TextComponent Start_Info
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [condition] = 1.0
      text = Click here or hit Space bar
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent Thank_You
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    TextComponent Consent_remind
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [condition] = 1.0
      text = Click here to Finish Experiment
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Simulation
    CodeComponent Simulator
      Code Type = Py
      Begin Routine:
        print("Hello world")
  Routine Safety_Judgements
    TextComponent Question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    ImageComponent Vehicle_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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    TextComponent Sub_Question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent Sub_Question_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent Sub_Question_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine AV_Judgements
    TextComponent AV_Question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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      text:
        Any text

        including line breaks
    ImageComponent car_image
      image = /home/rfox/PhD/Term1_22-23_Experiements/pygame_ped_env/pygame_ped_env/images/Topdown_vehicle_sprites_pack/car.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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    SliderComponent slider_4
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent car_image_2
      image = /home/rfox/PhD/Term1_22-23_Experiements/pygame_ped_env/pygame_ped_env/images/Topdown_vehicle_sprites_pack/car.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
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    SliderComponent slider_5
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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Flow
  Routine Intro_Page
  LoopInitiator Trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Start_Page
    Routine Simulation
    Routine Safety_Judgements
    Routine AV_Judgements
  LoopTerminator Trials
  Routine Thanks
